opentrons/protocol-designer 3.0.8
schemaVersion: 3
protocolName: 96_Tubes_to_96well_plate
author: Yasir Ahmed-Braimah
description: This protocol uses four tube racks to move DNA from 96 tubes to a 96-well palte
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 6}
  DNA plate 1: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 2}
  DNA plate 2: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 3}
  DNA plate 3: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 4}
  DNA plate 4: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 5}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - DNA: {description: all sample DNAs}
ingredLocations:
  DNA plate 1:
    DNA {volume: 250}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  DNA plate 2:
    DNA {volume: 250}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  DNA plate 3:
    DNA {volume: 250}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  DNA plate 4:
    DNA {volume: 250}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 60
  path: single
  changeTip: always
  aspirate_labware: DNA plate 1
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 100
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1, A2-H2, A3-H3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 60
  path: single
  changeTip: always
  aspirate_labware: DNA plate 2
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 100
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 60
  path: single
  changeTip: always
  aspirate_labware: DNA plate 3
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 100
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A7-H7, A8-H8, A9-H9
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 60
  path: single
  changeTip: always
  aspirate_labware: DNA plate 4
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_flowRate: 100
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 100, labware: DNA plate 1, well: A1, offsetFromBottomMm: 1, flowRate: 100}
- dispense: {pipette: p300_single_gen2, volume: 100, labware: DNA plate 1, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 100, labware: DNA plate 1, well: A1, offsetFromBottomMm: 1, flowRate: 100}
- dispense: {pipette: p300_single_gen2, volume: 100, labware: DNA plate 1, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 100, labware: DNA plate 1, well: A1, offsetFromBottomMm: 1, flowRate: 100}
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