opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: ATTS_genomic_DNA_96
description: Run genomic DNA ScreenTape Assay on 64 samples
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p10_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL (slot 4): {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 4}
  buffer: {definitionId: opentrons/opentrons_24_tuberack_generic_2ml_screwcap/1, slot: 1}
  DNA plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 7}
  output: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 2}
  Opentrons 96 Tip Rack 10 µL (slot 3): {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 3}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
  p10_multi: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - gDNA_buffer
  - DNA samples
ingredLocations:
  buffer:
    gDNA_buffer {volume: 700}: A1
  DNA plate:
    DNA samples {volume: 30}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: buffer
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: output
  dispense_wells: H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 7.4
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A1-A8
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  aspirate_mmFromBottom: 1
  dispense_labware: output
  dispense_wells: A1-A8
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 7.4
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL (slot 3), well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: buffer, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: output, well: H1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- touchTip: {pipette: p20_single_gen2, labware: output, well: H1, offsetFromBottomMm: 7.4}
- blowout: {pipette: p20_single_gen2, labware: output, well: H1, flowRate: 3.78, offsetFromBottomMm: 14.78}
- dropTip: {pipette: p20_single_gen2, labware: Trash, well: A1}
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