opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: DNA_Qubit_quantification_96_samples
description: Transfer 96 DNA samples from 96-well plate to Qubit tubes and add QUbit reagent
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: right}
  p20_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  qubit: {definitionId: opentrons/opentrons_10_tuberack_nest_4x50ml_6x15ml_conical/1, slot: 1}
  DNA plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 4}
  A: {definitionId: custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1, slot: 2}
  B: {definitionId: custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1, slot: 3}
  C: {definitionId: custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1, slot: 5}
  D: {definitionId: custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1, slot: 6}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 7}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 8}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - Qubit_reagent
  - DNA
ingredLocations:
  qubit:
    Qubit_reagent {volume: 20000}: B3
  DNA plate:
    DNA {volume: 25}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 5
  aspirate_mmFromBottom: 1
  dispense_labware: A
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 15
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A4-H4, A5-H5, A6-H6
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 5
  aspirate_mmFromBottom: 1
  dispense_labware: B
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A7-H7, A8-H8, A9-H9
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 5
  aspirate_mmFromBottom: 1
  dispense_labware: C
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A10-H10, A11-H11, A12-H12
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 5
  aspirate_mmFromBottom: 1
  dispense_labware: D
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 198
  path: single
  changeTip: always
  aspirate_labware: qubit
  aspirate_wells: B3
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  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 87.8
  dispense_labware: A
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 80
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 100
  dispense_mmFromBottom: 8.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 198
  path: single
  changeTip: always
  aspirate_labware: qubit
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 92.8
  dispense_labware: B
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 80
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 100
  dispense_mmFromBottom: 8.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 198
  path: single
  changeTip: always
  aspirate_labware: qubit
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: C
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 80
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 100
  dispense_mmFromBottom: 8.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 198
  path: single
  changeTip: always
  aspirate_labware: qubit
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  aspirate_touchTip_checkbox: true
  dispense_labware: D
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 80
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 100
  dispense_mmFromBottom: 8.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1:
    brand: {brand: Qubit assay tubes on PCR tray, brandId: [Invitrogen/13829]}
    metadata: {displayName: Qubit Assay Tubes On PCR Tray 24 Well Plate 500 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.57, zDimension: 38}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: qubitassaytubesonpcrtray_24_wellplate_500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 28, totalLiquidVolume: 500, shape: circular, diameter: 7, x: 9, y: 63.57, z: 10}
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 5, labware: DNA plate, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 5, labware: DNA plate, well: A1, offsetFromBottomMm: 1, flowRate: 15}
- aspirate: {pipette: p20_single_gen2, volume: 2, labware: DNA plate, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 2, labware: A, well: A1, offsetFromBottomMm: 0.5, flowRate: 15}
- touchTip: {pipette: p20_single_gen2, labware: A, well: A1, offsetFromBottomMm: 14}
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