opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: DNA_dilution_and_Qubit_quantification_24_samples_I
author: Yasir Ahmed-Braimah
description: Perform a 3-step serial dilution of 24 samples then mix reagents for Qubit quantification (part I)
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL (slot 3): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 3}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 4}
  Qubit tubes: {definitionId: custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1, slot: 1}
  DNA plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 2}
  Water: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 5}
  Opentrons 96 Tip Rack 300 µL (slot 6): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 6}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - DNA: {description: 24 samples of DNA}
  - H2O: {description: water}
ingredLocations:
  DNA plate:
    DNA {volume: 10}: A1-H1, A2-H2, A3-H3
  Water:
    H2O {volume: 10000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Water
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA plate
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 20
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A1-A3
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA plate
  dispense_wells: A4-A6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Water
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA plate
  dispense_wells: A4-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 40
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A4-A6
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA plate
  dispense_wells: A7-A9
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Water
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA plate
  dispense_wells: A7-A9
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 40
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A7-A9
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA plate
  dispense_wells: A10-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Water
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA plate
  dispense_wells: A10-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 4
  dispense_mix_volume: 40
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: DNA plate
  aspirate_wells: A10-H10, A11-H11, A12-H12
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  aspirate_mmFromBottom: 1
  dispense_labware: Qubit tubes
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 15
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Change pipettes (swap P300 multi-channel with P300 single-channel), and go to part II of protocol.
labwareDefinitions:
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  custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1:
    brand: {brand: Qubit assay tubes on PCR tray, brandId: [Invitrogen/13829]}
    metadata: {displayName: Qubit Assay Tubes On PCR Tray 24 Well Plate 500 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.57, zDimension: 38}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: qubitassaytubesonpcrtray_24_wellplate_500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 28, totalLiquidVolume: 500, shape: circular, diameter: 7, x: 9, y: 63.57, z: 10}
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Tip Rack 300 µL (slot 3), well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 40, labware: Water, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 40, labware: DNA plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 20, labware: DNA plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 20, labware: DNA plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- dropTip: {pipette: p300_multi_gen2, labware: Trash, well: A1}
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