opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: DNA_dilution_and_Qubit_quantification_24_samples_II
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 3}
  DNA: {definitionId: custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1, slot: 1}
  Opentrons 15 Tube Rack with Falcon 15 mL Conical: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 2}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Qubit_reagent
  - DNA
ingredLocations:
  DNA:
    DNA {volume: 2}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  Opentrons 15 Tube Rack with Falcon 15 mL Conical:
    Qubit_reagent {volume: 5000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 198
  path: single
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: DNA
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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  custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1:
    brand: {brand: Qubit assay tubes on PCR tray, brandId: [Invitrogen/13829]}
    metadata: {displayName: Qubit Assay Tubes On PCR Tray 24 Well Plate 500 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.57, zDimension: 38}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: qubitassaytubesonpcrtray_24_wellplate_500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 28, totalLiquidVolume: 500, shape: circular, diameter: 7, x: 9, y: 63.57, z: 10}
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 198, labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 198, labware: DNA, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 100, labware: DNA, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 100, labware: DNA, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 100, labware: DNA, well: A1, offsetFromBottomMm: 0.5, flowRate: 46.43}
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