opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: DNA_transfer_24_tubes_to_96well_plate
author: Yasir Ahmed-Braimah
description: Transfer DNA samples from 24 1.5mL tubes on tube rack to 96 well PCR plates
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 10}
  output DNA: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 9}
  Source DNA: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 8}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - DNA samples
ingredLocations:
  Source DNA:
    DNA samples {volume: 200}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Source DNA
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: output DNA
  dispense_wells: A1-H1, A2-H2, A3-H3
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Replace the Source DNA tubes with next set (25-48)
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Source DNA
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: output DNA
  dispense_wells: A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Replace the Source DNA tubes with next set (48-72).
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Source DNA
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: output DNA
  dispense_wells: A7-H7, A8-H8, A9-H9
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Replace the Source DNA tubes with next set (72-96)
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Source DNA
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: output DNA
  dispense_wells: A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 2, labware: Source DNA, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 2, labware: output DNA, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- dropTip: {pipette: p20_single_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL, well: B1}
- aspirate: {pipette: p20_single_gen2, volume: 2, labware: Source DNA, well: B1, offsetFromBottomMm: 1, flowRate: 3.78}
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