opentrons/protocol-designer 5.0.1
schemaVersion: 3
protocolName: JC_acgRNA_pre-GA_PCR
author: Yasir Ahmed-Braimah
description: To amplify pre-GA fragments  using the TTTgRNAt plasmid as template and
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 7}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 6}
  IDT primers: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 4}
  diluter primers: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 2}
  Reagents: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 3}
  Output plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 1}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  -  pBB-1-R: {description: universal rev primer}
  -  pBB-2-F: {description: universal fwd primer}
  - Master MIX: {description: dNTPs, Taq, buffer, DNA, Water}
  - H20: {description: water}
  - gRNA primers: {description: individual gRNA primer oligos}
ingredLocations:
  IDT primers:
    gRNA primers {volume: 100}: A1-H1, A2-H2, A3-H3, A4-F4
  Reagents:
     pBB-2-F {volume: 100}: A1
     pBB-1-R {volume: 100}: B1
    Master MIX {volume: 1500}: C1
    H20 {volume: 1500}: D1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: IDT primers
  aspirate_wells: A1-H1, A2-H2, A3-H3, A4-F4
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  aspirate_flowRate: 10
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 4
  dispense_labware: diluter primers
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-F4
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: D1
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  aspirate_flowRate: 200
  aspirate_mmFromBottom: 1
  dispense_labware: diluter primers
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-F4
  dispense_flowRate: 150
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 30
  dispense_mmFromBottom: 2.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 9.8
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: diluter primers
  aspirate_wells: A1-H1, A2-H2, A3-H3, A4-F4
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  aspirate_flowRate: 15
  aspirate_mmFromBottom: 1
  dispense_labware: Output plate
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-F4
  dispense_flowRate: 20
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 7.4
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: B1
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  aspirate_flowRate: 15
  aspirate_mmFromBottom: 1
  dispense_labware: Output plate
  dispense_wells: A1-G1, H2, A3-G3
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 7.4
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  aspirate_flowRate: 15
  aspirate_mmFromBottom: 1
  dispense_labware: Output plate
  dispense_wells: H1, A2-G2, H3, A4-F4
  dispense_flowRate: 15
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 7.4
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 46
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: C1
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  aspirate_flowRate: 250
  aspirate_mmFromBottom: 1
  dispense_labware: Output plate
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-F4
  dispense_flowRate: 150
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 35
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 7.8
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: IDT primers, well: A1, offsetFromBottomMm: 4, flowRate: 10}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: IDT primers, well: A1, offsetFromBottomMm: 4, flowRate: 15}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: IDT primers, well: A1, offsetFromBottomMm: 4, flowRate: 10}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: IDT primers, well: A1, offsetFromBottomMm: 4, flowRate: 15}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: IDT primers, well: A1, offsetFromBottomMm: 4, flowRate: 10}
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