opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: Qubit_24_samples_transfer
author: Yasir Ahmed-Braimah
description: Transfer 24 DNA samples from 96-well plate to Qubit tubes
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 3}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 2}
  Qubit tubes: {definitionId: custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1, slot: 1}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - DNA
ingredLocations:
  NEST 96 Well Plate 100 µL PCR Full Skirt:
    DNA {volume: 80}: A1-H1, A2-H2, A3-H3, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A10-H10, A11-H11, A12-H12
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  aspirate_mmFromBottom: 1
  dispense_labware: Qubit tubes
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  dispense_flowRate: 15
  dispense_mmFromBottom: 0
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 14
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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  custom_beta/qubitassaytubesonpcrtray_24_wellplate_500ul/1:
    brand: {brand: Qubit assay tubes on PCR tray, brandId: [Invitrogen/13829]}
    metadata: {displayName: Qubit Assay Tubes On PCR Tray 24 Well Plate 500 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.57, zDimension: 38}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: qubitassaytubesonpcrtray_24_wellplate_500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 28, totalLiquidVolume: 500, shape: circular, diameter: 7, x: 9, y: 63.57, z: 10}
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 2, labware: NEST 96 Well Plate 100 µL PCR Full Skirt, well: A10, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 2, labware: Qubit tubes, well: A1, offsetFromBottomMm: 0.5, flowRate: 15}
- touchTip: {pipette: p20_single_gen2, labware: Qubit tubes, well: A1, offsetFromBottomMm: 14}
- blowout: {pipette: p20_single_gen2, labware: Qubit tubes, well: A1, flowRate: 15, offsetFromBottomMm: 28}
- dropTip: {pipette: p20_single_gen2, labware: Trash, well: A1}
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