opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: Transfer_150ul_to_96well_plate_x2
author: Martin Garlovsky
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
  p1000_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 2}
  Opentrons 6 Tube Rack with Falcon 50 mL Conical: {definitionId: opentrons/opentrons_6_tuberack_falcon_50ml_conical/1, slot: 3}
  NEST 96 Well Plate 200 µL Flat: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 8}
  NEST 96 Well Plate 200 µL Flat (1): {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 9}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
  p1000_single_gen2: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - Zymo Genomic lysis buffer
ingredLocations:
  Opentrons 6 Tube Rack with Falcon 50 mL Conical:
    Zymo Genomic lysis buffer {volume: 30000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 150
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 200 µL Flat
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 9.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 150
  path: multiDispense
  changeTip: never
  aspirate_labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 200 µL Flat (1)
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 9.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p1000_single_gen2, labware: Opentrons 96 Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single_gen2, volume: 1000, labware: Opentrons 6 Tube Rack with Falcon 50 mL Conical, well: A1, offsetFromBottomMm: 1, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 150, labware: NEST 96 Well Plate 200 µL Flat, well: A1, offsetFromBottomMm: 9.5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 150, labware: NEST 96 Well Plate 200 µL Flat, well: B1, offsetFromBottomMm: 9.5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 150, labware: NEST 96 Well Plate 200 µL Flat, well: C1, offsetFromBottomMm: 9.5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 150, labware: NEST 96 Well Plate 200 µL Flat, well: D1, offsetFromBottomMm: 9.5, flowRate: 137.35}
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