opentrons/protocol-designer 4.0.5
schemaVersion: 3
protocolName: Transfer_24_DNA_samples_from_tubes_to_96well_plate
author: Yasir Ahmed-Braimah
description: Transferring 10µl of DNA from tubes to 96-well plate
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  DNA samples: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 2}
  transDNA: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 3}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - DNA
ingredLocations:
  DNA samples:
    DNA {volume: 100}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: DNA samples
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 3
  dispense_labware: transDNA
  dispense_wells: A1-H1, A2-H2, A3-H3
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: DNA samples, well: A1, offsetFromBottomMm: 3, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: DNA samples, well: A1, offsetFromBottomMm: 3, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: DNA samples, well: A1, offsetFromBottomMm: 3, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: DNA samples, well: A1, offsetFromBottomMm: 3, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: DNA samples, well: A1, offsetFromBottomMm: 3, flowRate: 3.78}
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