opentrons/protocol-designer 3.0.8
schemaVersion: 3
protocolName: Y_contig_PCR
author: Yasir Ahmed-Braimah
description: Perform PCR validation of candidate Y contigs
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p10_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 10 µL (slot 4): {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 4}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 6}
  Opentrons 96 Tip Rack 10 µL (slot 1): {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 1}
  male PCR: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 8}
  female PCR: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 9}
  reagents: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 5}
  Opentrons 96 Tip Rack 10 µL (slot 7): {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 7}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_10ul/1
  p10_multi: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - PRIMERS
  - MM_f
  - MM_M
ingredLocations:
  NEST 96 Well Plate 100 µL PCR Full Skirt:
    PRIMERS {volume: 100}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  reagents:
    MM_M {volume: 1500}: D1
    MM_f {volume: 1500}: D6
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: reagents
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: male PCR
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: reagents
  aspirate_wells: D6
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  aspirate_mmFromBottom: 1
  dispense_labware: female PCR
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: male PCR
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_multi
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: female PCR
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 10 µL (slot 1), well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: reagents, well: D1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: male PCR, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: reagents, well: D1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: male PCR, well: B1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: reagents, well: D1, offsetFromBottomMm: 1, flowRate: 3.78}
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