opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: my first protocol
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 1}
  96 well 1: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 4}
  96 well 2: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 5}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Water + dye 1
  - Water + dye 2
ingredLocations:
  96 well 1:
    Water + dye 1 {volume: 50}: A1-H1
    Water + dye 2 {volume: 50}: A2-H2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: 96 well 1
  aspirate_wells: A1-H1, A2-H2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 well 2
  dispense_wells: A1-H1, A2-H2
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 5, labware: 96 well 1, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 5, labware: 96 well 2, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- dropTip: {pipette: p20_single_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: B1}
- aspirate: {pipette: p20_single_gen2, volume: 5, labware: 96 well 1, well: B1, offsetFromBottomMm: 1, flowRate: 3.78}
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